<PlusConfiguration version="2.5" PlusRevision="Plus-2.7.0.e4d528e1 - Win32">
  <DataCollection StartupDelaySec="1.0">
    <DeviceSet Name="SpineUs OptiTrack V120:Duo" Description="OptiTrack Duo and Telemed ultrasound." />
    <Device
      Id="TrackerDevice"
      Type="OptiTrack"
      ToolReferenceFrame="Tracker"
      ProjectFile="ScoliUsFlatMarkers2.ttp"
      AttachToRunningMotive="FALSE"
      MotiveDataDescriptionsUpdateTimeSec="1.0">
      <DataSources>
        <DataSource Type="Tool" Id="Reference" />
        <DataSource Type="Tool" Id="Probe" />
        <DataSource Type="Tool" Id="Stylus2" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="TrackerStream">
          <DataSource Type="Tool" Id="Reference" />
          <DataSource Type="Tool" Id="Probe" />
          <DataSource Type="Tool" Id="Stylus2" />
        </OutputChannel>
      </OutputChannels>
    </Device>
    <Device Id="VideoDevice" LocalTimeOffsetSec="0.0" Type="TelemedVideo" DepthMm="90">
      <DataSources>
        <DataSource Type="Video" Id="Video" PortUsImageOrientation="UF" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="VideoStream" VideoDataSourceId="Video" />
      </OutputChannels>
    </Device>
    <Device Id="TrackedVideoDevice" Type="VirtualMixer">
      <InputChannels>
        <InputChannel Id="TrackerStream" />
        <InputChannel Id="VideoStream" />
      </InputChannels>
      <OutputChannels>
        <OutputChannel Id="TrackedVideoStream" />
      </OutputChannels>
    </Device>
    <Device
      Id="CaptureDevice"
      Type="VirtualCapture"
      BaseFilename="RecordingTest.mhd"
      EnableCapturing="FALSE"
      EnableCompression="FALSE"
      FrameBufferSize="50">
      <InputChannels>
        <InputChannel Id="TrackedVideoStream" />
      </InputChannels>
    </Device>
  </DataCollection>
  <CoordinateDefinitions>
    <Transform From="Image" To="Probe"
      Matrix="
        -0.120335	0.159953	-0.0211547	42.1602
        -0.0183469	0.0126539	0.200041	1.66931
        0.1603	0.121523	0.00701487	59.151
        0	0	0	1" />
    <Transform From="Image" To="TransdPixel"
      Matrix="
        1	0	0	-260
        0	1	0	-50
        0	0	1	0
        0	0	0	1" />
    <Transform From="TransdPixel" To="Transd"
      Matrix="
        0.193681	0	0	0
        0	0.193681	0	0
        0	0	0.193681	0
        0	0	0	1" />
  </CoordinateDefinitions>
  <PlusOpenIGTLinkServer MaxNumberOfIgtlMessagesToSend="1" MaxTimeSpentWithProcessingMs="50" ListeningPort="18944" SendValidTransformsOnly="true" OutputChannelId="TrackedVideoStream">
    <DefaultClientInfo>
      <MessageTypes>
        <Message Type="IMAGE" />
        <Message Type="TRANSFORM" />
      </MessageTypes>
      <TransformNames>
        <Transform Name="ProbeToTracker" />
        <Transform Name="ReferenceToTracker" />
        <Transform Name="TransdToReference" />
        <Transform Name="ImageToTransd" />
        <Transform Name="Stylus2ToReference" />
      </TransformNames>
      <ImageNames>
        <Image Name="Image" EmbeddedTransformToFrame="Image" />
        <Image Name="Image" EmbeddedTransformToFrame="Reference" />
      </ImageNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>
</PlusConfiguration>
